PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2056, 1329]
  expName = stim-sequence
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sounds
      sound [set every repeat] = $stims
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    SerialOutComponent serialPort
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = None
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [condition] = 1.0
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine welcomescreen
    TextComponent welcometext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = welcome to the experiment 
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  Routine goodbyescreen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = End of Experiment
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  Routine blank
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Break Session
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Flow
  Routine welcomescreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_list_2.xlsx
    loopType = random
    nReps = 1
    random seed = 42
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    conditions:
      [{'stims': 'sounds/sun_rain.wav'},
      {'stims': 'sounds/up_down.wav'},
      {'stims': 'sounds/hot_cold.wav'},
      {'stims': 'sounds/night_day.wav'},
      {'stims': 'sounds/sweet_sour.wav'},
      {'stims': 'sounds/big_small.wav'},
      {'stims': 'sounds/fast_slow.wav'},
      {'stims': 'sounds/in_out.wav'},
      {'stims': 'sounds/happy_sad.wav'},
      {'stims': 'sounds/open_close.wav'},
      {'stims': 'sounds/bee_honey.wav'},
      {'stims': 'sounds/bird_fly.wav'},
      {'stims': 'sounds/bird_nest.wav'},
      {'stims': 'sounds/butterfly_flower.wav'},
      {'stims': 'sounds/cheetah_fast.wav'},
      {'stims': 'sounds/dog_bark.wav'},
      {'stims': 'sounds/elephant_trunk.wav'},
      {'stims': 'sounds/frog_pond.wav'},
      {'stims': 'sounds/giraffe_neck.wav'},
      {'stims': 'sounds/lion_roar.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/dev.wav'},
      {'stims': 'sounds/dev.wav'},
      {'stims': 'sounds/dev.wav'},
      {'stims': 'sounds/dev.wav'}]
    Routine trial
  LoopTerminator trials
  Routine blank
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stim_list_2.xlsx
    loopType = random
    nReps = 1
    random seed = 32
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    conditions:
      [{'stims': 'sounds/sun_rain.wav'},
      {'stims': 'sounds/up_down.wav'},
      {'stims': 'sounds/hot_cold.wav'},
      {'stims': 'sounds/night_day.wav'},
      {'stims': 'sounds/sweet_sour.wav'},
      {'stims': 'sounds/big_small.wav'},
      {'stims': 'sounds/fast_slow.wav'},
      {'stims': 'sounds/in_out.wav'},
      {'stims': 'sounds/happy_sad.wav'},
      {'stims': 'sounds/open_close.wav'},
      {'stims': 'sounds/bee_honey.wav'},
      {'stims': 'sounds/bird_fly.wav'},
      {'stims': 'sounds/bird_nest.wav'},
      {'stims': 'sounds/butterfly_flower.wav'},
      {'stims': 'sounds/cheetah_fast.wav'},
      {'stims': 'sounds/dog_bark.wav'},
      {'stims': 'sounds/elephant_trunk.wav'},
      {'stims': 'sounds/frog_pond.wav'},
      {'stims': 'sounds/giraffe_neck.wav'},
      {'stims': 'sounds/lion_roar.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/std.wav'},
      {'stims': 'sounds/dev.wav'},
      {'stims': 'sounds/dev.wav'},
      {'stims': 'sounds/dev.wav'},
      {'stims': 'sounds/dev.wav'}]
    Routine trial
  LoopTerminator trials_2
  Routine blank
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = stim_list_2.xlsx
    loopType = random
    nReps = 1
    random seed = 22
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    conditions:
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    Routine trial
  LoopTerminator trials_3
  Routine goodbyescreen
